CellProfiler Pipeline: http://www.cellprofiler.org
Version:4
DateRevision:319
GitHash:
ModuleCount:34
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Custom
    Select the rule criteria:and (extension does istif) (file doesnot contain "Scored") (file doesnot contain "DIC")

Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<Channel>C.*)_(?P<Strain>[A-P][0-9]{2})_s(?P<FOV>[0-9])_w(?P<ChannelNumber>[0-9])
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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notes:['The NamesAndTypes module allows you to assign a meaningful name to each image by which other modules will refer to it.', '', '2020.07.16 YC note: I used image prefix to specifiy the channel. The current setting is compatible with YC_TwoColor setting on the Leica microscope. C1: DIC @50 ms, C2: GFP @50 ms; C3: GFP @500 ms; C4: Cy3 @50 ms; C5: Cy3 @500 ms. I opt to use C3 and C5 for the fluorescent channels.']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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:5
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:or (file does contain "C1")
    Name to assign these images:DIC_image
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:or (file does contain "C2")
    Name to assign these images:GFP_50s
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:or (file does contain "C3")
    Name to assign these images:GFP_250ms
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:or (file does contain "C4")
    Name to assign these images:GFP_500ms
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:or (file does contain "C5")
    Name to assign these images:GFP_1s
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:Yes
    grouping metadata count:1
    Metadata category:Strain

EnhanceOrSuppressFeatures:[module_num:5|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notes:['2020.07.16 YC note: this is used to smooth the DIC images.']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
    Select the input image:DIC_image
    Name the output image:Enhance_Cell
    Select the operation:Suppress
    Feature size:15
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
EdgeDetection:[module_num:6|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notes:['']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
    Select the input image:Enhance_Cell
    Name the output image:EdgeDetection
    Mask:Enhance_Cell

EnhanceEdges:[module_num:7|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
    Select the input image:EdgeDetection
    Name the output image:EdgedCellImage_SOBEL
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    Select an edge-finding method:Sobel
    Select edge direction to enhance:All
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
IdentifyPrimaryObjects:[module_num:8|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notes:['2020.07.16 YC note: this is used to segement yeast cells using the DIC images.']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
    Select the input image:EdgedCellImage_SOBEL
    Name the primary objects to be identified:cell
    Typical diameter of objects, in pixel units (Min,Max):30,150
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
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    Suppress local maxima that are closer than this minimum allowed distance:15
    Speed up by using lower-resolution image to find local maxima?:No
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:No
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:RobustBackground
    Threshold smoothing scale:1.3488
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.0,1.0
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    Lower outlier fraction:0.05
    Upper outlier fraction:0.05
    Averaging method:Mean
    Variance method:Standard deviation
    # of deviations:2.0
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
FilterObjects:[module_num:9|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enabled:False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
    Select the objects to filter:cell
    Name the output objects:cell_filter
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:3
    Additional object count:0
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    Select the measurement to filter by:AreaShape_Area
    Filter using a minimum measurement value?:No
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    Filter using a maximum measurement value?:Yes
    Maximum value:150
    Select the measurement to filter by:AreaShape_Eccentricity
    Filter using a minimum measurement value?:No
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    Filter using a maximum measurement value?:Yes
    Maximum value:0.80
    Select the measurement to filter by:Intensity_IntegratedIntensity_punctachannel
    Filter using a minimum measurement value?:Yes
    Minimum value:2
    Filter using a maximum measurement value?:No
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
GaussianFilter:[module_num:10|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notes:['2020.07.16 YC note: this is used to blurr the image a bit to reduce background noise. ']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
    Select the input image:GFP_1s
    Name the output image:GFP_image_GaussianFilter
    Sigma:1

ImageMath:[module_num:11|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notes:['2020.07.16 YC note: this is a rather aggressive intensity transformation step used to deal with images with wide range of fluorescent protein expression. This help to pick up any cell that is GFP/Cy3-positive for expression scoring. Make sure to select the original image to grab the actual intensity measurements. ']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
    Operation:Log transform (base 2)
    Raise the power of the result by:1
    Multiply the result by:5
    Add to result:0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:GFP_postLogEnhance
    Image or measurement?:Image
    Select the first image:GFP_image_GaussianFilter
    Multiply the first image by:2.0
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    Image or measurement?:Image
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
IdentifyPrimaryObjects:[module_num:12|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notes:['2020.07.16 YC note: this is used to score any part of image that is GFP positive.']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
    Select the input image:GFP_postLogEnhance
    Name the primary objects to be identified:GFP_all
    Typical diameter of objects, in pixel units (Min,Max):15,150
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
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    Speed up by using lower-resolution image to find local maxima?:No
    Fill holes in identified objects?:Never
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.3488
    Threshold correction factor:.7
    Lower and upper bounds on threshold:0,1.0
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    Two-class or three-class thresholding?:Two classes
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
RelateObjects:[module_num:13|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notes:['2020.07.16 YC note: this associate the GFP-postive area to the cell segemented before.']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
    Parent objects:cell
    Child objects:GFP_all
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:Yes
    Name the output object:cell_GFPall
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
MaskImage:[module_num:14|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
    Select the input image:GFP_image_GaussianFilter
    Name the output image:GFP_mask
    Use objects or an image as a mask?:Objects
    Select object for mask:cell_GFPall
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    Invert the mask?:Yes

MeasureImageIntensity:[module_num:15|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
    Select the image to measure:GFP_mask
    Measure the intensity only from areas enclosed by objects?:No
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
ImageMath:[module_num:16|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
    Operation:Subtract
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:GFP_nobackground
    Image or measurement?:Image
    Select the first image:GFP_image_GaussianFilter
    Multiply the first image by:1.0
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    Image or measurement?:Measurement
    Select the second image:Cy3_image_GaussianFilter
    Multiply the second image by:1.0
    Measurement:Intensity_MeanIntensity_GFP_mask

ImageMath:[module_num:17|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
    Operation:Subtract
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:GFP_nobackground
    Image or measurement?:Image
    Select the first image:GFP_image_GaussianFilter
    Multiply the first image by:1.0
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    Image or measurement?:Measurement
    Select the second image:Cy3_image_GaussianFilter
    Multiply the second image by:1.0
    Measurement:Intensity_MeanIntensity_GFP_mask

EnhanceOrSuppressFeatures:[module_num:18|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
    Select the input image:GFP_nobackground
    Name the output image:GFP_puncta_brightup
    Select the operation:Enhance
    Feature size:10
    Feature type:Speckles
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    Speed and accuracy:Slow

IdentifyPrimaryObjects:[module_num:19|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notes:['2020.08.15 YC note: this is used to score any part of image that has bright/obvious GFP puncta.']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
    Select the input image:GFP_puncta_brightup
    Name the primary objects to be identified:GFP_puncta_bright
    Typical diameter of objects, in pixel units (Min,Max):1,15
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:Never
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    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.3488
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.025,1.0
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    Two-class or three-class thresholding?:Two classes
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
ImageMath:[module_num:20|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notes:['2020.07.16 YC note: this is a intensity transformation step used to deal with images with both bright and dim fluorescent cells. This help to pick up any cell that is GFP/Cy3-positive to identify those with  puncta. Make sure to select the original image to grab the actual intensity measurements. ']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
    Operation:Log transform (base 2)
    Raise the power of the result by:1
    Multiply the result by:5.0
    Add to result:0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:GFP_postLog
    Image or measurement?:Image
    Select the first image:GFP_nobackground
    Multiply the first image by:1.0
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    Image or measurement?:Image
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
EnhanceOrSuppressFeatures:[module_num:21|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notes:['2020.07.16 YC note: this step help significantly enhance puncta features.  Make sure to apply this prior to object (puncta) identificiation.']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
    Select the input image:GFP_postLog
    Name the output image:GFP_puncta_dimup
    Select the operation:Enhance
    Feature size:8
    Feature type:Speckles
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    Speed and accuracy:Slow

IdentifyPrimaryObjects:[module_num:22|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notes:['2020.07.16 YC note: this is used to score any part of image that has dimmer GFP puncta.']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
    Select the input image:GFP_puncta_dimup
    Name the primary objects to be identified:GFP_puncta_dim
    Typical diameter of objects, in pixel units (Min,Max):1,15
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:Never
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    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.3488
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.025,1.0
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    Two-class or three-class thresholding?:Two classes
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
RelateObjects:[module_num:23|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notes:['2020.07.16 YC note: this associate the GFP-puncta to the cell segemented before.']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
    Parent objects:cell
    Child objects:GFP_puncta_bright
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:Yes
    Name the output object:cell_GFPpuncta_bright
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
MaskObjects:[module_num:24|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
    Select objects to be masked:GFP_puncta_dim
    Name the masked objects:GFP_puncta_dim_refilter
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:GFP_puncta_bright
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    Handling of objects that are partially masked:Remove
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

RelateObjects:[module_num:25|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
    Parent objects:cell
    Child objects:GFP_puncta_dim_refilter
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:Yes
    Name the output object:cell_GFPpuncta_dim
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
MeasureObjectIntensity:[module_num:26|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
    Hidden:1
    Select an image to measure:GFP_250ms
    Select objects to measure:cell_GFPpuncta_bright
    Select objects to measure:cell_GFPpuncta_dim
    Select objects to measure:cell

OverlayObjects:[module_num:27|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notes:['2020.07.16 YC note: this is to see the mask where the DIC segementation occur. The saveimage module output this.']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
    Input:DIC_image
    Name the output image:DIC_segementation
    Objects:cell
    Opacity:0.1

OverlayObjects:[module_num:28|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notes:['2020.07.16 YC note: this is to overlay the scored GFP puncta with the original file. The saveimage module output this.']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
    Input:GFP_250ms
    Name the output image:GFP_ScoredBrightPuncta
    Objects:cell_GFPpuncta_bright
    Opacity:0.1

OverlayObjects:[module_num:29|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notes:['2020.07.16 YC note: this is to overlay the scored GFP positive area with the DIC mask. The saveimage module output this.']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
    Input:GFP_250ms
    Name the output image:GFP_ScoredDimPuncta
    Objects:cell_GFPpuncta_dim
    Opacity:0.1

SaveImages:[module_num:30|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
    Select the type of image to save:Image
    Select the image to save:DIC_segementation
    Select method for constructing file names:Single name
    Select image name for file prefix:DIC_image
    Enter single file name:DIC_segementation
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    Saved file format:tiff
    Output file location:Same folder as image|/Users/akc/Documents/Projects/CellProfiler_tutorial_lab
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:31|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
    Select the type of image to save:Image
    Select the image to save:GFP_ScoredBrightPuncta
    Select method for constructing file names:From image filename
    Select image name for file prefix:GFP_250ms
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_GFP_ScoredBrightPuncta
    Saved file format:tiff
    Output file location:Same folder as image|/Users/akc/Documents/Projects/CellProfiler_tutorial_lab
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:32|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
    Select the type of image to save:Image
    Select the image to save:GFP_ScoredDimPuncta
    Select method for constructing file names:From image filename
    Select image name for file prefix:GFP_250ms
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_GFP_ScoredDimPuncta
    Saved file format:tiff
    Output file location:Same folder as image|/Users/akc/Documents/Projects/CellProfiler_tutorial_lab
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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
ExportToSpreadsheet:[module_num:33|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Elsewhere...|/Volumes/LabBackups/KillifishSeeding/20170926_OneColor_gd/20170926/OneColor-GAL-8hrs/YC_SingleColor_v1_out
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
    Press button to select measurements:cell|Number_Object_Number,cell|Children_GFP_puncta_dim_refilter_Count,cell|Children_GFP_puncta_bright_Count,cell|Children_GFP_all_Count,cell_GFPpuncta_dim|Intensity_MeanIntensity_GFP_250ms,cell_GFPpuncta_dim|Parent_GFP_puncta_dim_refilter,cell_GFPpuncta_dim|Number_Object_Number,cell_GFPpuncta_bright|Intensity_MeanIntensity_GFP_250ms,cell_GFPpuncta_bright|Parent_GFP_puncta_bright,cell_GFPpuncta_bright|Number_Object_Number
    Representation of Nan/Inf:Null
    Add a prefix to file names?:Yes
    Filename prefix:20170717_2%GAL_30C_
    Overwrite existing files without warning?:Yes
    Data to export:Object relationships
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
    Data to export:cell
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
    Data to export:Experiment
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes

CreateBatchFiles:[module_num:34|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enabled:False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
    Store batch files in default output folder?:No
    Output folder path:/Users/yiwenchen
    Are the cluster computers running Windows?:No
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    Local root path:/Users/yiwenchen
    Cluster root path:/Users/yiwenchen
